<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices>
        <iodevice tag="FM" priority="" type="fake_monkey" id=""/>
        <iodevice tag="ITC" priority="" alt="FM" type="itc18" id="">
            <iochannel variable="AnalogChannel0" capability="ITC18_ADC_INPUT0" data_type="analog" direction="input" synchrony="hardware_timed_synchronous" range_min="-10" range_max="10" resolution="16" update_interval="3ms" data_interval="1ms" tag="analog_data_channel" TTL_trigger_port="0" pre_trigger_interval="5ms" post_trigger_interval="5ms"/>
        </iodevice>
    </io_devices>
    <variables>
        <variable tag="AnalogChannel0" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
    </variables>
    <sounds/>
    <stimuli/>
    <experiment tag="AnalogInExample">
        <protocol tag="Protocol" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
            <block tag="Block" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
                <trial tag="Trial" description="" interruptible="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles">
                    <task_system tag="TS" interruptable="YES" description="" interruptible="YES">
                        <task_system_state tag="openITC" full_name="openITC" interruptable="YES" description="" interruptible="YES">
                            <action type="start_device_IO" device="ITC"/>
                            <action type="wait" duration="4000ms"/>
                            <action type="stop_device_IO" device="ITC"/>
                            <transition type="yield"/>
                        </task_system_state>
                    </task_system>
                </trial>
            </block>
        </protocol>
    </experiment>
</monkeyml>