<?xml version="1.0"?>
<monkeyml version="1.0">
    <filters>
        <filter tag="filter_eyeH" full_name="filter_eyeH" id="" type="boxcar_filter_1D" in1="eye_h_calibrated" out1="eye_h" width_samples="5"/>
        <filter tag="filter_eyeV" full_name="filter_eyeV" id="" type="boxcar_filter_1D" in1="eye_v_calibrated" out1="eye_v" width_samples="5"/>
        <filter tag="eyeMonitor" full_name="eyeMonitor" id="" type="basic_eye_monitor" eyeh_calibrated="eye_h" eyev_calibrated="eye_v" eye_state="saccade" width_samples="5" saccade_entry_speed="20" saccade_exit_speed="15"/>
    </filters>
    <io_devices>
        <!--iodevice tag="Setup 1 ITC18" priority="" alt="s1_Fake_Monkey" type="ITC18" id="">
            <iochannel variable="eye_h_raw" capability="ITC18_ADC_INPUT0" data_type="analog" direction="input" synchrony="hardware_timed_synchronous" range_min="-10" range_max="10" resolution="16" update_interval="3ms" data_interval="1ms" tag="Eye_H_channel"/>
            <iochannel variable="eye_v_raw" capability="ITC18_ADC_INPUT1" data_type="analog" direction="input" synchrony="hardware_timed_synchronous" range_min="-10" range_max="10" resolution="16" update_interval="3ms" data_interval="1ms" tag="Eye_V_channel"/>
            <iochannel variable="reward" capability="ITC18_TTL_ASYCH_OUT00" data_type="pulseActiveLow" direction="output" synchrony="asynchronous" range_min="0" range_max="5" resolution="1" update_interval="3ms" data_interval="1ms" tag="Reward_channel"/>
            <iochannel variable="vertical_refresh" capability="ITC18_TTL_INPUT1" data_type="edgeLowToHigh" direction="input" synchrony="hardware_timed_synchronous" range_min="0" range_max="5" resolution="1" update_interval="3ms" data_interval="0.5ms" tag="Vertical_Refresh_channel"/>
        </iodevice-->
        <iodevice tag="s1_Fake_Monkey" priority="" type="fake_monkey" id="">
            <iochannel type="eye_movement" eye_v="eye_v_raw" eye_h="eye_h_raw" data_interval="1ms" update_interval="10ms"/>
            <iochannel type="juice" variable="reward"/>
        </iodevice>

    </io_devices>
    <calibrators>
        <calibrator tag="eyeCalibrator" type="standard_eye_calibrator" eyeh_raw="eye_h_raw" eyev_raw="eye_v_raw" eyeh_calibrated="eye_h_calibrated" eyev_calibrated="eye_v_calibrated"/>
    </calibrators>
    <variables>
        <variable tag="saccade" full_name="saccade" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="vertical_refresh" full_name="vertical_refresh" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="eye_in_window" full_name="eye_in_window" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="number_of_stm_shown" full_name="number_of_stm_shown" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed" default_value="0"/>
        <variable tag="miss_count" full_name="miss_count" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="reward_duration" full_name="reward_duration" default_value="100000" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="reward" full_name="reward duration" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed">
            <action tag="play reward_sound" full_name="play reward_sound" type="play_sound" sound="reward_sound"/>
        </variable>
        <variable tag="success" full_name="success" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="failure" full_name="failure" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="ignore" full_name="ignore" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="fixation_duration" full_name="fixation_duration" default_value="1400000" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="eye_h_raw" full_name="eye_h_raw" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="never"/>
        <variable tag="eye_v_raw" full_name="eye_v_raw" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="never"/>
        <variable tag="eye_h_calibrated" full_name="eye_h_calibrated" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="never"/>
        <variable tag="eye_v_calibrated" full_name="eye_v_calibrated" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="never"/>
        <variable tag="eye_h" full_name="eye_h" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="when_changed"/>
        <variable tag="eye_v" full_name="eye_v" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="when_changed"/>
        <variable tag="stm_selector_x" full_name="stm_selector_x" default_value="0" scope="LOCAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="stm_selector_y" full_name="stm_selector_y" default_value="0" scope="LOCAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="fixation_width" full_name="fixation_width" default_value="25" scope="GLOBAL" type="FLOAT" editable="never" logging="when_changed"/>
        <variable tag="fixation_pos_x" full_name="fixation_pos_y" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="when_changed"/>
        <variable tag="fixation_pos_y" full_name="fixation_pos_y" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="when_changed"/>
        <variable tag="fixation_size" full_name="fixation_size" default_value="0" scope="GLOBAL" type="FLOAT" editable="never" logging="when_changed"/>
    </variables>
    <stimuli>
        <stimulus tag="fixation_dot" full_name="fixation_dot" type="fixation_point" color="1,1,1" trigger_width="fixation_width" trigger_watch_x="eye_h" trigger_watch_y="eye_v" trigger_flag="eye_in_window" x_size="fixation_size" y_size="fixation_size" x_position="fixation_pos_x" y_position="fixation_pos_y" rotation="0.0" contrast="1.0" affine_transform="0"/>
        <stimulus tag="blank screen" full_name="bland screen" type="blank_screen" color="0.5,0.5,0.5"/>
    </stimuli>
    <sounds>
        <sound tag="stm_on_sound" type="wav_file" path="./sounds/stm_on.wav" full_name="stm_on_sound"/>
        <sound tag="reward_sound" type="wav_file" path="./sounds/reward.wav" full_name="reward_sound"/>
        <sound tag="failure_sound" type="wav_file" path="./sounds/failure.wav" full_name="failure_sound"/>
        <sound tag="complete_sound" type="wav_file" path="./sounds/complete.wav" full_name="complete_sound"/>
        <sound tag="acquire_sound" type="wav_file" path="./sounds/acquire.wav" full_name="acquire_sound"/>
    </sounds>
    <experiment tag="Calibration" full_name="Calibration">
        <protocol tag="calibration protocol" full_name="calibration protocol" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
            <block tag="calibration block" full_name="calibration block" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
                <trial tag="calibration trial" full_name="calibration trial" interruptable="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
                    <task_system tag="calibration start">
                        <task_system_state tag="StartIO_state" full_name="StartIO_state" description="" interruptible="YES">
                            <action tag="start IO" full_name="start IO" type="start_device_IO" device="s1_Fake_Monkey"/>
                            <action tag="report" full_name="report" type="report" message="********** STARTING CALIBRATION **********"/>
                            <action tag="clear calibration" full_name="clear calibration" type="clear_calibration" calibrator="eyeCalibrator"/>
                            <action tag="reset stm counter" full_name="reset stm counter" type="assignment" variable="number_of_stm_shown" value="0"/>
                            <action tag="reset miss_count" full_name="reset miss_count" type="assignment" variable="miss_count" value="0"/>
                            <action tag="set fixation_width" full_name="set fixation_width" type="assignment" variable="fixation_width" value="fixation_width"/>
                            <transition type="yield" tag="yield" full_name="yield"/>
                        </task_system_state>
                    </task_system>
                    <list tag="calibration_list" selection="random_without_replacement" nsamples="1" sampling_method="cycles" full_name="calibration_list" description="" interruptible="YES">
                        <range_replicator tag="fixation_selection_H" full_name="fixation_selection_H" from="-15" to="15" step="5" variable="stm_selector_x">
                            <range_replicator tag="fixation_selection_V" full_name="fixation_selection_V" from="-15" to="15" step="5" variable="stm_selector_y">
                                <task_system tag="calibration task" full_name="calibration task" interruptable="YES" description="" interruptible="YES">
                                    <task_system_state tag="cal target selection" full_name="cal target selection" interruptable="YES" description="" interruptible="YES">
                                        <action tag="set fixation_pos_x" full_name="set fixation_pos_x" type="assignment" variable="fixation_pos_x" value="stm_selector_x"/>
                                        <action tag="set fixation_pos_y" full_name="set fixation_pos_y" type="assignment" variable="fixation_pos_y" value="stm_selector_y"/>
                                        <transition tag="go to cal pause" full_name="go to cal pause" target="cal pause" type="direct"/>
                                    </task_system_state>
                                    <task_system_state tag="cal pause" full_name="cal pause" interruptable="YES" description="" interruptible="YES">
                                        <action tag="start cal_timer" full_name="start cal_timer" type="start_timer" timer="cal_timer" duration="1000ms"/>
                                        <transition tag="go to cal wait" full_name="go to cal wait" target="cal wait" type="timer_expired" timer="cal_timer"/>
                                    </task_system_state>
                                    <task_system_state tag="cal wait" full_name="cal wait" interruptable="YES" description="" interruptible="YES">
                                        <action tag="set fixation_size" full_name="set fixation_size" type="assignment" variable="fixation_size" value="0"/>
                                        <action tag="queue fixation_dot" full_name="queue fixation_dot" type="live_queue_stimulus" stimulus="fixation_dot"/>
                                        <action tag="display refresh" full_name="display refresh" type="update_stimulus_display"/>
										<action tag="report" full_name="report" type="report" message="eye_in_window: $eye_in_window"/>
                                        <transition tag="go to cal stm on" full_name="go to cal stm on" target="cal stm on" type="conditional" condition="eye_in_window == 0"/>
                                    </task_system_state>
                                    <task_system_state tag="cal stm on" full_name="cal stm on" interruptable="YES" description="" interruptible="YES">
                                        <action type="play_sound" sound="stm_on_sound" tag="play stm_on_sound" full_name="play stm_on_sound"/>
                                        <action tag="set fixation_size" full_name="set fixation_size" type="assignment" variable="fixation_size" value="0.4"/>
                                        <action tag="display refresh" full_name="display refresh" type="update_stimulus_display"/>
                                        <transition tag="go to cal prefixation" full_name="go to cal prefixation" target="cal prefixation" type="direct"/>
                                    </task_system_state>
                                    <task_system_state tag="cal prefixation" full_name="cal prefixation" interruptable="YES" description="" interruptible="YES">
                                        <action tag="start prefixation_timer" full_name="start prefixation_timer" type="start_timer" timer="prefixation_timer" duration="1500ms"/>
					<action tag="monkey looks" full_name="monkey looks" type="fake_monkey_saccade_to_location" fake_monkey="s1_Fake_Monkey" h="fixation_pos_x" v="fixation_pos_y"/>
                                        <transition tag="go to cal ignore" full_name="go to cal ignore" target="cal ignore" type="timer_expired" timer="prefixation_timer"/>
                                        <transition tag="go to cal acquire" full_name="go to cal acquire" target="cal acquire" type="conditional" condition="(eye_in_window == 1) #AND (saccade == 0)"/>
                                    </task_system_state>
                                    <task_system_state tag="cal acquire" full_name="cal acquire" interruptable="YES" description="" interruptible="YES">
                                        <action type="play_sound" sound="acquire_sound" tag="play acquire_sound" full_name="play acquire_sound"/>
                                        <action tag="start cal_timer" full_name="start cal_timer" type="start_timer" timer="cal_timer" duration="fixation_duration"/>
                                        <transition tag="go to cal fixation" full_name="go to cal fixation" target="cal fixation" type="direct"/>
                                    </task_system_state>
                                    <task_system_state tag="cal fixation" full_name="cal fixation" interruptable="YES" description="" interruptible="YES">
                                        <action tag="report" full_name="report" type="report" message="************* FIXATION!!!! **********"/>
                                        <action tag="monkey looks" full_name="monkey looks" type="fake_monkey_saccade_to_location" fake_monkey="s1_Fake_Monkey" h="fixation_pos_x" v="fixation_pos_y"/>
					<action type="wait" duration="50000"/>
					<action type="fake_monkey_fixate" fake_monkey="s1_Fake_Monkey" duration="fixation_duration"/>
                                        <action tag="begin averaging" full_name="begin averaging" type="begin_calibration_average" calibrator="eyeCalibrator"/>
                                        <transition tag="go to cal failure" full_name="go to cal failure" target="cal failure" type="conditional" condition="eye_in_window==0"/>
                                        <transition tag="go to cal fixation monitor" full_name="go to cal fixation monitor" target="cal fixation monitor" type="conditional" condition="saccade==1"/>
                                        <transition tag="go to cal pre reward" full_name="go to cal pre reward" target="cal pre reward" type="timer_expired" timer="cal_timer"/>
                                    </task_system_state>
                                    <task_system_state tag="cal fixation monitor" full_name="cal fixation monitor" interruptable="YES" description="" interruptible="YES">
                                        <action tag="stop averaging" full_name="stop averaging" type="end_calibration_average_and_ignore" calibrator="eyeCalibrator"/>
                                        <action tag="report" full_name="report" type="report" message="************* Saccading!!!! **********"/>
                                        <transition tag="go to cal fixation" full_name="go to cal fixation" target="cal fixation" type="conditional" condition="(eye_in_window == 1) #AND (saccade == 0)"/>
                                        <transition tag="go to cal failure" full_name="go to cal failure" target="cal failure" type="conditional" condition="(eye_in_window == 0) #AND (saccade == 0)"/>
                                    </task_system_state>
                                    <task_system_state tag="cal pre reward" full_name="cal pre reward" interruptable="YES" description="" interruptible="YES">
                                        <action tag="start cal_timer" full_name="start cal_timer" type="start_timer" timer="cal_timer" duration="30ms"/>
                                        <transition tag="go to cal success saccade" full_name="go to cal success saccade" target="cal success" type="conditional" condition="saccade==1"/>
                                        <transition tag="go to cal success" full_name="go to cal success" target="cal success" type="timer_expired" timer="cal_timer"/>
                                    </task_system_state>
                                    <task_system_state tag="cal success" full_name="cal success" interruptable="YES" description="" interruptible="YES">
                                        <action tag="end averaging take sample" full_name="end averaging take sample" type="end_calibration_average_and_take_sample" calibrator="eyeCalibrator" calibratable_object="fixation_dot"/>
                                        <action tag="report" full_name="report" type="report" message="************* HIT!!!! **********"/>
                                        <action tag="set success" full_name="set success" type="assignment" variable="success" value="1"/>
                                        <action tag="dequeue fixation_dot" full_name="dequeue fixation_dot" type="dequeue_stimulus" stimulus="fixation_dot"/>
                                        <action tag="display refresh" full_name="display refresh" type="update_stimulus_display"/>
                                        <action tag="juice on" full_name="juice on" type="assignment" variable="reward" value="reward_duration"/>
                                        <action tag="set stm counter" full_name="set stm counter" type="assignment" variable="number_of_stm_shown" value="number_of_stm_shown+1"/>
                                        <action tag="reset miss_count" full_name="reset miss_count" type="assignment" variable="miss_count" value="0"/>
                                        <action tag="accept calibration selection" full_name="accept calibration selection" type="accept_selections" selection="calibration_list"/>
                                        <transition type="yield" tag="cal yield" full_name="cal yield"/>
                                    </task_system_state>
                                    <task_system_state tag="cal failure" full_name="cal failure" interruptable="YES" description="" interruptible="YES">
                                        <action tag="stop averaging" full_name="stop averaging" type="end_calibration_average_and_ignore" calibrator="eyeCalibrator"/>
                                        <action tag="report message" full_name="report message" type="report" message="************* MISS!!!! **********"/>
                                        <action type="play_sound" sound="failure_sound" tag="play failure_sound" full_name="play failure_sound"/>
                                        <action tag="start rough_cal_timer" full_name="start rough_cal_timer" type="start_timer" timer="rough_cal_timer" duration="500ms"/>
                                        <transition tag="go to cal failure end" full_name="go to cal failure end" target="cal failure end" type="timer_expired" timer="rough_cal_timer"/>
                                    </task_system_state>
                                    <task_system_state tag="cal failure end" full_name="cal  failure end" interruptable="YES" description="" interruptible="YES">
                                        <action tag="dequeue fixation_dot" full_name="dequeue fixation_dot" type="dequeue_stimulus" stimulus="fixation_dot"/>
                                        <action tag="display refresh" full_name="display refresh" type="update_stimulus_display"/>
                                        <action tag="set failure" full_name="set failure" type="assignment" variable="failure" value="1"/>
                                        <action tag="set miss_count" full_name="set miss_count" type="assignment" variable="miss_count" value="miss_count+1"/>
                                        <action tag="reject calibration selection" full_name="reject calibration selection" type="reject_selections" selection="calibration_list"/>
                                        <transition tag="go to cal punish" full_name="go to cal punish" target="cal punish" type="conditional" condition="miss_count==7"/>
                                        <transition type="yield" tag="cal yield" full_name="cal yield"/>
                                    </task_system_state>
                                    <task_system_state tag="cal ignore" full_name="cal ignore" interruptable="YES" description="" interruptible="YES">
                                        <action tag="report message" full_name="report message" type="report" message="************* IGNORE!!!! **********"/>
                                        <action tag="set ignore" full_name="set ignore" type="assignment" variable="ignore" value="1"/>
                                        <action tag="dequeue fixation_dot" full_name="dequeue fixation_dot" type="dequeue_stimulus" stimulus="fixation_dot"/>
                                        <action tag="display refresh" full_name="display refresh" type="update_stimulus_display"/>
                                        <action tag="set miss_count" full_name="set miss_count" type="assignment" variable="miss_count" value="miss_count+1"/>
                                        <action tag="reject calibration selection" full_name="reject calibration selection" type="reject_selections" selection="calibration_list"/>
                                        <transition tag="go to cal punish" full_name="go to cal punish" target="cal punish" type="conditional" condition="miss_count==7"/>
                                        <transition type="yield" tag="cal yield" full_name="cal yield"/>
                                    </task_system_state>
                                    <task_system_state tag="cal punish" full_name="cal punish" interruptable="YES" description="" interruptible="YES">
                                        <action tag="reset miss_count" full_name="reset miss_count" type="assignment" variable="miss_count" value="0"/>
                                        <action tag="start cal_timer" full_name="start cal_timer" type="start_timer" timer="cal_timer" duration="20000ms"/>
                                        <transition type="yield" tag="cal yield" full_name="cal yield"/>
                                    </task_system_state>
                                </task_system>
                            </range_replicator>
                        </range_replicator>
                    </list>
                    <task_system tag="calibration end">
                        <task_system_state tag="StopIO_state" full_name="StopIO_state" description="" interruptible="YES">
                            <action tag="report message" full_name="report message" type="report" message="************* CALIBRATION FINISHED **********"/>
                            <action type="play_sound" sound="complete_sound" tag="play complete_sound" full_name="play complete_sound"/>
                            <action tag="calibrate" full_name="calibrate" type="update_calibration" calibrator="eyeCalibrator"/>
                            <action type="stop_device_IO" device="s1_Fake_Monkey" tag="stop_device_IO" full_name="stop_device_IO"/>
                            <transition type="yield" tag="yield" full_name="yield"/>
                        </task_system_state>
                    </task_system>
                </trial>
            </block>
        </protocol>
    </experiment>
</monkeyml>
