<?xml version="1.0"?>
<monkeyml version="1.0">
    <filters>
        <filter full_name="Boxcar_eyeH" id="" in1="eye_h_calibrated" out1="eye_h" tag="Boxcar_eyeH" type="boxcar_filter_1D" width_samples="5" />
        <filter full_name="Boxcar_eyeV" id="" in1="eye_v_calibrated" out1="eye_v" tag="Boxcar_eyeV" type="boxcar_filter_1D" width_samples="5" />
        <filter eye_state="saccade" eyeh_calibrated="eye_h" eyev_calibrated="eye_v" full_name="eyeMonitor" id="" saccade_entry_speed="60" saccade_exit_speed="10" tag="eyeMonitor" type="basic_eye_monitor" width_samples="5" />
    </filters>
    <io_devices>
        <iodevice id="" priority="" tag="Setup 1 ITC18" type="ITC18">
            <iochannel capability="ITC18_ADC_INPUT0" data_interval="1ms" data_type="analog" direction="input" range_max="10" range_min="-10" resolution="16" synchrony="hardware_timed_synchronous" tag="~ELEMENTNAME~~ELEMENTCOUNT~" update_interval="3ms" variable="eye_h_raw" />
            <iochannel capability="ITC18_ADC_INPUT1" data_interval="1ms" data_type="analog" direction="input" range_max="10" range_min="-10" resolution="16" synchrony="hardware_timed_synchronous" tag="~ELEMENTNAME~~ELEMENTCOUNT~" update_interval="3ms" variable="eye_v_raw" />
        </iodevice>
    </io_devices>
    <calibrators>
        <calibrator eyeh_calibrated="eye_h_calibrated" eyeh_raw="eye_h_raw" eyev_calibrated="eye_v_calibrated" eyev_raw="eye_v_raw" full_name="eyeCalibrator" tag="eyeCalibrator" type="standard_eye_calibrator" />
    </calibrators>
    <variables>
        <variable default_value="0" editable="never" full_name="eye_h_raw_log" logging="when_changed" scope="GLOBAL" tag="eye_h_raw_log" type="FLOAT" />
        <variable default_value="0" editable="never" full_name="eye_h_raw" logging="when_changed" scope="GLOBAL" tag="eye_h_log" type="FLOAT" />
        <variable default_value="0" editable="never" full_name="eye_h_raw" logging="when_changed" scope="GLOBAL" tag="eye_h_calibrated_log" type="FLOAT" />
        <variable default_value="0" editable="never" full_name="saccade_register" logging="when_changed" scope="GLOBAL" tag="saccade_log" type="INTEGER" />
        <variable default_value="0" editable="never" full_name="saccade" logging="when_changed" scope="GLOBAL" tag="saccade" type="INTEGER">
            <action full_name="fullname_1" tag="Assignment_1" type="assignment" value="1" variable="saccade_log" />
        </variable>
        <variable default_value="0" editable="never" full_name="eye_h_raw" logging="when_changed" scope="GLOBAL" tag="eye_h_raw" type="FLOAT">
            <action full_name="fullname_4" tag="Assignment_4" type="assignment" value="1" variable="eye_h_raw_log" />
        </variable>
        <variable default_value="0" editable="never" full_name="eye_v_raw" logging="when_changed" scope="GLOBAL" tag="eye_v_raw" type="FLOAT" />
        <variable default_value="0" editable="never" full_name="eye_h_calibrated" logging="when_changed" scope="GLOBAL" tag="eye_h_calibrated" type="FLOAT">
            <action full_name="fullname_5" tag="Assignment_5" type="assignment" value="1" variable="eye_h_calibrated_log" />
        </variable>
        <variable default_value="0" editable="never" full_name="eye_v_calibrated" logging="when_changed" scope="GLOBAL" tag="eye_v_calibrated" type="FLOAT" />
        <variable default_value="0" editable="never" full_name="eye_h" logging="when_changed" scope="GLOBAL" tag="eye_h" type="FLOAT">
            <action full_name="fullname_6" tag="Assignment_6" type="assignment" value="1" variable="eye_h_log" />
        </variable>
        <variable default_value="0" editable="never" full_name="eye_v" logging="when_changed" scope="GLOBAL" tag="eye_v" type="FLOAT" />
    </variables>
    <stimuli />
    <sounds />
    <experiment full_name="Super Awesome Happy" tag="It is your boy">
        <protocol description="" full_name="sup" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="refprot">
            <block description="" full_name="supsup" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="sup2">
                <task_system description="" full_name="fullname12" interruptable="YES" interruptible="YES" tag="task_system12">
                    <task_system_state description="" full_name="fullname13" interruptable="YES" interruptible="YES" tag="task_system_state13">
                        <action device="Setup 1 ITC18" full_name="fullname14" tag="action14" type="start_device_IO" />
                        <action duration="15000ms" full_name="fullname15" tag="action15" timer="timer" type="start_timer" />
                        <transition full_name="fullname18" tag="transition18" target="task_system_state16" timer="timer" type="timer_expired" />
                    </task_system_state>
                    <task_system_state description="" full_name="fullname16" interruptable="YES" interruptible="YES" tag="task_system_state16">
                        <action device="Setup 1 ITC18" full_name="fullname19" tag="action19" type="stop_device_IO" />
                        <transition full_name="fullname17" tag="transition17" type="yield" />
                    </task_system_state>
                </task_system>
            </block>
        </protocol>
    </experiment>
</monkeyml>
