<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices>
        <iodevice id="" priority="" tag="ITC" type="ITC18">
            <iochannel capability="ITC18_ADC_INPUT0" data_interval="1ms" data_type="analog" direction="input" range_max="10" range_min="-10" resolution="16" synchrony="hardware_timed_synchronous" tag="Eye_H_channel" update_interval="3ms" variable="eye_h" />
            <iochannel capability="ITC18_ADC_INPUT1" data_interval="1ms" data_type="analog" direction="input" range_max="10" range_min="-10" resolution="16" synchrony="hardware_timed_synchronous" tag="Eye_V_channel" update_interval="3ms" variable="eye_v" />
            <iochannel capability="ITC18_TTL_ASYCH_OUT00" data_interval="1ms" data_type="pulse_active_low" direction="output" range_max="5" range_min="0" resolution="1" synchrony="asynchronous" tag="Reward_channel" update_interval="3ms" variable="reward" />
            <iochannel capability="ITC18_TTL_INPUT0" data_interval="0.5ms" data_type="edge_low_to_high" direction="input" range_max="5" range_min="0" resolution="1" synchrony="hardware_timed_synchronous" tag="ioTTLchannel0" update_interval="5ms" variable="TTLchannel0" />
            <iochannel capability="ITC18_TTL_INPUT1" data_interval="0.5ms" data_type="edge_high_to_low" direction="input" range_max="5" range_min="0" resolution="1" synchrony="hardware_timed_synchronous" tag="ioTTLchannel1" update_interval="5ms" variable="TTLchannel1" />
            <iochannel capability="ITC18_TTL_INPUT2" data_interval="1ms" data_type="edge_any" direction="input" range_max="5" range_min="0" resolution="1" synchrony="hardware_timed_synchronous" tag="ioTTLchannel2" update_interval="10ms" variable="TTLchannel2" />
            <iochannel capability="ITC18_TTL_INPUT3" data_interval="50ms" data_type="digital" direction="input" range_max="5" range_min="0" resolution="1" synchrony="hardware_timed_synchronous" tag="ioTTLchannel3" update_interval="50ms" variable="TTLchannel3" />
        </iodevice>
    </io_devices>
    <variables>
        <variable default_value="0" editable="never" full_name="reward" logging="when_changed" scope="GLOBAL" tag="reward" type="INTEGER" />
        <variable default_value="0" editable="never" full_name="eye_h" logging="when_changed" scope="GLOBAL" tag="eye_h" type="FLOAT" />
        <variable default_value="0" editable="never" full_name="eye_v" logging="when_changed" scope="GLOBAL" tag="eye_v" type="FLOAT" />
        <variable default_value="0" editable="never" full_name="TTLchannel0" logging="when_changed" scope="GLOBAL" tag="TTLchannel0" type="INTEGER" />
        <variable default_value="0" editable="never" full_name="TTLchannel1" logging="when_changed" scope="GLOBAL" tag="TTLchannel1" type="INTEGER" />
        <variable default_value="0" editable="never" full_name="TTLchannel2" logging="when_changed" scope="GLOBAL" tag="TTLchannel2" type="INTEGER" />
        <variable default_value="0" editable="never" full_name="TTLchannel3" logging="when_changed" scope="GLOBAL" tag="TTLchannel3" type="INTEGER" />
    </variables>
    <sounds />
    <stimuli />
    <experiment full_name="Super Awesome Happy" tag="It is your boy">
        <protocol description="" full_name="sup" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="refprot">
            <block description="" full_name="supsup" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="sup2">
                <trial description="" full_name="fullname_1" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Trial_1">
                    <task_system description="" full_name="fullname12" interruptable="YES" interruptible="YES" tag="task_system12">
                        <task_system_state description="" full_name="fullname13" interruptable="YES" interruptible="YES" tag="task_system_state13">
                            <action device="ITC" full_name="fullname14" tag="action14" type="start_device_IO" />
                            <action duration="100ms" full_name="fullname15" tag="action15" timer="timer" type="start_timer" />
                            <transition full_name="fullname18" tag="transition18" target="task_system_state16" timer="timer" type="timer_expired" />
                        </task_system_state>
                        <task_system_state description="" full_name="fullname16" interruptable="YES" interruptible="YES" tag="task_system_state16">
                            <action device="ITC" full_name="fullname19" tag="action19" type="stop_device_IO" />
                            <transition full_name="fullname17" tag="transition17" type="yield" />
                        </task_system_state>
                    </task_system>
                </trial>
            </block>
        </protocol>
    </experiment>
</monkeyml>
