<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices>
        <iodevice id="" priority="" tag="ITC" type="ITC18">
            <iochannel capability="ITC18_TTL_INPUT0" data_interval="0.5ms" data_type="edge_low_to_high" direction="input" range_max="5" range_min="0" resolution="1" synchrony="hardware_timed_synchronous" tag="ioTTLchannel0" update_interval="5ms" variable="TTLchannel0" />
        </iodevice>
    </io_devices>
    <variables>
        <variable default_value="0" editable="never" full_name="TTLchannel0" logging="when_changed" scope="GLOBAL" tag="TTLchannel0" type="INTEGER" />
    </variables>
    <sounds />
    <stimuli />
    <experiment full_name="DigitalInExample" tag="DigitalInExample">
        <protocol description="" full_name="Protocol" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Protocol">
            <block description="" full_name="Block" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Block">
                <trial description="" full_name="Trial" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Trial">
                    <task_system description="" full_name="TS" interruptable="YES" interruptible="YES" tag="TS">
                        <task_system_state description="" full_name="openITC" interruptable="YES" interruptible="YES" tag="openITC">
                            <action device="ITC" full_name="startIO" tag="startIO" type="start_device_IO" />
                            <action duration="20000ms" full_name="StartTrialTimer" tag="StartTrialTimer" timer="trialTimer" type="start_timer" />
                            <transition full_name="goToReadDigitalIn" tag="goToReadDigitalIn" target="ReadDigitalIn" type="direct" />
                        </task_system_state>
                        <task_system_state description="" full_name="ReadDigitalIn" interruptible="YES" tag="ReadDigitalIn">
                            <action full_name="ReportDigital" message="TTLchannel0 = $TTLchannel0" tag="ReportDigital" type="report" />
                            <transition full_name="goToContinue" tag="goToContinue" target="Continue" type="direct" />
                        </task_system_state>
                        <task_system_state description="" full_name="Continue" interruptible="YES" tag="Continue">
                            <action duration="500ms" full_name="StartReadTimer" tag="StartReadTimer" timer="readTimer" type="start_timer" />
                            <transition full_name="goToReadDigitalInTE" tag="goToReadDigitalInTE" target="ReadDigitalIn" timer="readTimer" type="timer_expired" />
                            <transition full_name="goToCloseITCTE" tag="goToCloseITCTE" target="CloseITC" timer="trialTimer" type="timer_expired" />
                        </task_system_state>
                        <task_system_state description="" full_name="CloseITC" interruptable="YES" interruptible="YES" tag="CloseITC">
                            <action device="ITC" full_name="stopIO" tag="stopIO" type="stop_device_IO" />
                            <transition full_name="end" tag="end" type="yield" />
                        </task_system_state>
                    </task_system>
                </trial>
            </block>
        </protocol>
    </experiment>
</monkeyml>
