<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices>
        <iodevice id="" priority="" tag="ITC" type="itc18">
            <iochannel capability="ITC18_ADC_INPUT0" data_interval="1ms" data_type="analog" direction="input" range_max="10" range_min="-10" resolution="16" synchrony="hardware_timed_synchronous" tag="analog_data_channel" update_interval="3ms" variable="AnalogChannel0" />
        </iodevice>
    </io_devices>
    <variables>
        <variable default_value="0" editable="never" logging="when_changed" scope="GLOBAL" tag="AnalogChannel0" type="INTEGER" />
    </variables>
    <sounds />
    <stimuli />
    <experiment tag="AnalogInExample">
        <protocol description="" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Protocol">
            <block description="" interruptable="YES" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Block">
                <trial description="" interruptible="YES" nsamples="1" sampling_method="cycles" selection="sequential_ascending" tag="Trial">
                    <task_system description="" interruptable="YES" interruptible="YES" tag="TS">
                        <task_system_state description="" full_name="openITC" interruptable="YES" interruptible="YES" tag="openITC">
                            <action device="ITC" type="start_device_IO" />
                            <action duration="4000ms" type="wait" />
                            <action device="ITC" type="stop_device_IO" />
                            <transition type="yield" />
                        </task_system_state>
                    </task_system>
                </trial>
            </block>
        </protocol>
    </experiment>
</monkeyml>
