<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices _id="id27645" tag="IO Devices">
        <iodevice tag="MSSWGamepad" priority="" data_type="event" type="sidewinder_gamepad" data_interval="50ms" up="up" down="down" left="left" right="right" trigger_right="trigger_right" trigger_left="trigger_left" a="button_A" b="button_B" x="button_X" y="button_Y"/>
    </io_devices>
    <variables _id="id8936779" tag="Variables">
        <variable _id="id8936780" tag="button_A" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"></variable>
        <variable tag="button_B" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="button_X" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="button_Y" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="trigger_right" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="trigger_left" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="up" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="down" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="left" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
        <variable tag="right" default_value="0" scope="GLOBAL" type="INTEGER" editable="never" logging="when_changed"/>
    </variables>
    <experiment _id="id8936670" tag="Experiment">
        <protocol _id="id8936642" tag="Protocol" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
            <block _id="id8935632" tag="Block" selection="sequential_ascending" nsamples="1" sampling_method="cycles" description="" interruptible="YES">
                <trial _id="id23267" tag="Trial" interruptible="YES" selection="sequential_ascending" nsamples="1" sampling_method="cycles">
                    <task_system _id="id8934962" tag="TS" full_name="TS" interruptible="YES">
                        <task_system_state _id="id8935771" tag="state1" interruptible="YES">
                            <action type="start_device_IO" device="MSSWGamepad"></action>
                            <action _id="_id4" type="start_timer" tag="Start Timer" timer="the_timer" timebase="" duration="25" duration_units="s"></action>
                            <transition _id="_id1" type="timer_expired" tag="If Timer Expired, Transition to ..." target="state2" timer="the_timer"></transition>
                        </task_system_state>
                        <task_system_state _id="id8935973" tag="state2" interruptible="YES">
                            <action type="stop_device_IO" device="MSSWGamepad"></action>
                            <transition _id="id8936749" type="yield"></transition>
                        </task_system_state>
                    </task_system>
                </trial>
            </block>
        </protocol>
    </experiment>
</monkeyml>
