%define mode_000 = 'off'
%define mode_001 = 'continuous'
%define mode_010 = 'sinusoidal'
%define mode_011 = 'inverse_sinusoidal'
%define mode_100 = 'square'

%define frequency_0 = 0.5
%define frequency_87 = 5.2784
%define frequency_183 = 71.1068
%define frequency_234 = 283.0813
%define frequency_255 = 500.0

%define gain_00_00 = 0.0
%define gain_ab_00 = 171 / 65535
%define gain_12_34 = 13330 / 65535
%define gain_cd_89 = 35277 / 65535
%define gain_ff_ff = 1.0

var mode_1 = mode_001
var mode_2 = mode_010
var mode_3 = mode_011
var mode_4 = mode_100
var frequency = frequency_87
var gain_1 = gain_ab_00
var gain_2 = gain_12_34
var gain_3 = gain_cd_89
var gain_4 = gain_ff_ff
var meg_state = false


qcualor laser (
    mode_1 = mode_1
    mode_2 = mode_2
    mode_3 = mode_3
    mode_4 = mode_4
    modulation_frequency = frequency
    gain_1 = gain_1
    gain_2 = gain_2
    gain_3 = gain_3
    gain_4 = gain_4
    max_gain = 1.0
    meg_state = meg_state
    log_commands = true
    )


protocol {
    report ('Beginning protocol')

    report ('Activating all channels')
    start_io_device (laser)
    assert (meg_state)

    report ('Deactivating all channels')
    stop_io_device (laser)
    assert (!meg_state)

    report ('Deactivating all channels again (should have no effect)')
    stop_io_device (laser)
    assert (!meg_state)

    report ('Activating channel 1 only')
    mode_1 = mode_010
    mode_2 = mode_000
    mode_3 = mode_000
    mode_4 = mode_000
    frequency = frequency_183
    gain_1 = gain_12_34
    start_io_device (laser)
    assert (meg_state)

    report ('Deactivating channel 1 only')
    stop_io_device (laser)
    assert (!meg_state)

    report ('Activating channel 2 only')
    mode_1 = mode_000
    mode_2 = mode_011
    frequency = frequency_234
    gain_2 = gain_cd_89
    start_io_device (laser)
    assert (meg_state)

    report ('Deactivating channel 2 only')
    stop_io_device (laser)
    assert (!meg_state)

    report ('Activating channel 3 only')
    mode_2 = mode_000
    mode_3 = mode_100
    frequency = frequency_255
    gain_3 = gain_ff_ff
    start_io_device (laser)
    assert (meg_state)

    report ('Deactivating channel 3 only')
    stop_io_device (laser)
    assert (!meg_state)

    report ('Activating channel 4 only')
    mode_3 = mode_000
    mode_4 = mode_001
    frequency = frequency_0
    gain_4 = gain_ab_00
    start_io_device (laser)
    assert (meg_state)

    report ('Deactivating channel 4 only')
    stop_io_device (laser)
    assert (!meg_state)

    report ('Activating no channels')
    mode_4 = mode_000
    start_io_device (laser)
    assert (meg_state)

    report ('Activating channel 1')
    mode_1 = mode_011
    frequency = frequency_87
    meg_state = false
    start_io_device (laser)
    assert (meg_state)

    report ('Activating channel 2 (channel 1 still active)')
    mode_2 = mode_100
    frequency = frequency_183
    meg_state = false
    start_io_device (laser)
    assert (meg_state)

    report ('Activating channel 3 (channels 1-2 still active)')
    mode_3 = mode_001
    frequency = frequency_234
    meg_state = false
    start_io_device (laser)
    assert (meg_state)

    report ('Activating channel 4 (channels 1-3 still active)')
    mode_4 = mode_010
    frequency = frequency_255
    meg_state = false
    start_io_device (laser)
    assert (meg_state)

    report ('Ending protocol')
}
