//
// This test exercises the digital inputs on a RCB-LVDS device.  To check that
// the channel values are set correctly in the device's data stream, run the
// script BasicPacketChecker.py, and configure the RCB-LVDS device to stream
// data to the script (which binds to 10.0.1.2:4407 by default).
//

var val1 = 0
var val2 = 0
var val3 = 0
var val4 = 0

rcb_lvds rcb_lvds (
    address = '10.0.1.93'
    ) {
    rcb_lvds_digital_input (
        channel = 0
        value = val1
        )
    rcb_lvds_digital_input (
        channel = 2,1,3
        value = val2
        )
    rcb_lvds_digital_input (
        channel = 4:8
        value = val3
        )
    rcb_lvds_digital_input (
        channel = 9,14:10,15
        value = val4
        )
}

protocol {
    val1 = 1
    val2 = 1
    val3 = 1
    val4 = 3

    // -----------------------     ----------------------
    // Action                      Expected channel state
    // -----------------------     ----------------------

    start_io_device (rcb_lvds)  // 0100001 00001 010 1

    val1 = 0                    // 0100001 00001 010 0
    val1 = 3 // Too many bits   // 0100001 00001 010 1

    val2 = 2                    // 0100001 00001 001 1
    val2 = 6                    // 0100001 00001 101 1

    val3 = 30                   // 0100001 11110 101 1

    val4 = 124                  // 1011110 11110 101 1

    stop_io_device (rcb_lvds)   // 0000000 00000 000 0
}
