<?xml version="1.0"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices"></io_devices>
    <variables tag="Variables">
        <variable tag="path" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
        <variable tag="ended" scope="global" logging="when_changed" exclude_from_data_file="NO" default_value="0" type="any"></variable>
        <variable tag="current_path" scope="local" logging="when_changed" exclude_from_data_file="NO" default_value="none" type="string"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli">
        <stimulus type="blank_screen" tag="bg" color="0,0,0"></stimulus>
        <stimulus type="video" tag="video" path="path" volume="0.0" loop="NO" repeats="0" ended="ended" x_size="15" y_size="15" x_position="0.0" y_position="0.0" rotation="0.0" alpha_multiplier="1.0" autoplay="YES" deferred="YES"></stimulus>
    </stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <resources tag="Resources">
        <resource tag="Slide video" path="slide.mp4"></resource>
        <resource tag="Boots video" path="boots.mp4"></resource>
    </resources>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <action tag="Queue bg" type="queue_stimulus" stimulus="bg"></action>
            <list_replicator tag="New List Replicator" values="slide.mp4, boots.mp4" variable="current_path">
                <trial tag="New Trial" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
                    <action type="assignment" tag="Reset ended" variable="ended" value="false"></action>
                    <action type="assignment" tag="Set path" variable="path" value="current_path"></action>
                    <action tag="Queue video" type="queue_stimulus" stimulus="video"></action>
                    <action tag="Update display" type="update_stimulus_display" predicted_output_time=""></action>
                    <action type="wait_for_condition" tag="Wait until ended" condition="ended" timeout="60s" timeout_message="&quot;ended&quot; was not set" stop_on_timeout="YES"></action>
                    <action tag="Dequeue video" type="dequeue_stimulus" stimulus="video"></action>
                    <action tag="Update display" type="update_stimulus_display" predicted_output_time=""></action>
                    <action tag="Unload video" type="unload_stimulus" stimulus="video"></action>
                </trial>
            </list_replicator>
        </protocol>
    </experiment>
</monkeyml>